PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'age': u'', u'ID': u'', u'sex': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save log file = False
  Data filename = u'data/%s_%s_%s' % (expInfo['ID'], expName, expInfo['date'])
  expName = glottal_pilot
  Screen = 1
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Routines
  Routine trial
    TextComponent utterance
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../stimuli/sentences.csv
    loopType = random
    nReps = 3
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    conditions:
      [{'position': u'medial', 'sentence_id': 1, 'word': u'cat', 'sentence': u"Say 'cat' again"},
      {'position': u'medial', 'sentence_id': 2, 'word': u'fat', 'sentence': u"Say 'fat' again"},
      {'position': u'medial', 'sentence_id': 3, 'word': u'chat', 'sentence': u"Say 'chat' again"},
      {'position': u'medial', 'sentence_id': 4, 'word': u'rat', 'sentence': u"Say 'rat' again"},
      {'position': u'medial', 'sentence_id': 5, 'word': u'Jack', 'sentence': u"Say 'Jack' again"},
      {'position': u'medial', 'sentence_id': 6, 'word': u'pack', 'sentence': u"Say 'pack' again"},
      {'position': u'medial', 'sentence_id': 7, 'word': u'Mac', 'sentence': u"Say 'Mac' again"},
      {'position': u'medial', 'sentence_id': 8, 'word': u'tack', 'sentence': u"Say 'tack' again"},
      {'position': u'medial', 'sentence_id': 9, 'word': u'writ', 'sentence': u"Say 'writ' again"},
      {'position': u'medial', 'sentence_id': 10, 'word': u'lit', 'sentence': u"Say 'lit' again"},
      {'position': u'medial', 'sentence_id': 11, 'word': u'kit', 'sentence': u"Say 'kit' again"},
      {'position': u'medial', 'sentence_id': 12, 'word': u'fit', 'sentence': u"Say 'fit' again"},
      {'position': u'medial', 'sentence_id': 13, 'word': u'kick', 'sentence': u"Say 'kick' again"},
      {'position': u'medial', 'sentence_id': 14, 'word': u'mick', 'sentence': u"Say 'mick' again"},
      {'position': u'medial', 'sentence_id': 15, 'word': u'chick', 'sentence': u"Say 'chick' again"},
      {'position': u'medial', 'sentence_id': 16, 'word': u'wick', 'sentence': u"Say 'wick' again"}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
    Routine trial
  LoopTerminator trials
